/* -*- Mode: Javascript; tab-width: 4; indent-tabs-mode: nil; c-basic-offset: 4 -*- */
{
    "io": {
            "footpedals": "xmlfiles/sawRobotIO1394-MTML-foot-pedals.xml"
        }
        ,
    "arms":
    [
        {
            "name": "MTMR",
            "type": "MTM",
            "io": "xmlfiles/sawRobotIO1394-MTMR-18545.xml",
            "pid": "sawControllersPID-MTMR.xml",
            "kinematic": "MTMR-18545.json"
        }
        ,
        {
            "name": "MTML",
            "type": "MTM",
            "io": "xmlfiles/sawRobotIO1394-MTML-36887.xml",
            "pid": "sawControllersPID-MTML.xml",
            "kinematic": "MTML-36887.json"
        }
    ]
    ,
    "psm-teleops":
        [
            {
                "mtm": "MTMR",
                "psm": "PSM1",
                "network": 1,
                "configure-parameter": {
                    "ignore-jaw": true
                }
            }
            ,
            {
                "mtm": "MTML",
                "network": 1,
                "psm": "PSM2"
            }
        ]
}
