/* -*- Mode: Javascript; tab-width: 4; indent-tabs-mode: nil; c-basic-offset: 4 -*- */
{
    // see dVRK user guide
    "DH": {
        "links": [
            {
                "convention": "modified",
                "alpha":  1.5708, "A":  0.0000, "theta":  0.0000, "D":  0.0000,
                "type": "revolute",
                "mode": "active",
                "offset":  1.5708
            },
            {
                "convention": "modified",
                "alpha": -1.5708, "A":  0.0000, "theta":  0.0000, "D":  0.0000,
                "type": "revolute",
                "mode": "active",
                "offset": -1.5708
            },
            {
                "convention": "modified",
                "alpha":  1.5708, "A":  0.0000, "theta":  0.0000, "D":  0.0000,
                "type": "prismatic",
                "mode": "active",
                "offset": -0.4318
            },
            {
                "convention": "modified",
                "alpha":  0.0000, "A":  0.0000, "theta":  0.0000, "D":  0.4162,
                "type": "revolute",
                "mode": "active",
                "offset":  0.0000
            },
            {
                "convention": "modified",
                "alpha": -1.5708, "A":  0.0000, "theta":  0.0000, "D":  0.0000,
                "type": "revolute",
                "mode": "active",
                "offset": -1.5708
            },
            {
                "convention": "modified",
                "alpha": -1.5708, "A":  0.0091, "theta":  0.0000, "D":  0.0000,
                "type": "revolute",
                "mode": "active",
                "offset": -1.5708
            }
        ]
    }
    ,
    // rotation to match ISI convention (for read-only research API on commercial da Vinci)
//    "tooltip-offset" : [[ 0.0, -1.0,  0.0,  0.0],
//                        [ 0.0,  0.0,  1.0,  0.0],
//                        [-1.0,  0.0,  0.0,  0.0],
//                         [ 0.0, 0.0, 0.0, 1.0]]
    "tooltip-offset" : [[ 1.0,  0.0,  0.0,  0.0],
                        [ 0.0,  1.0,  0.0,  0.0],
                        [ 0.0,  0.0,  1.0,  0.0],
                         [ 0.0, 0.0, 0.0, 1.0]]
    ,
    // values from the dVRK user guide, see tool appendix C
    "coupling" : {
        "ActuatorToJointPosition" : [[ 1.0000,  0.0000,  0.0000,  0.0000,  0.0000,  0.0000,  0.0000],
                                     [ 0.0000,  1.0000,  0.0000,  0.0000,  0.0000,  0.0000,  0.0000],
                                     [ 0.0000,  0.0000,  1.0000,  0.0000,  0.0000,  0.0000,  0.0000],
                                     [ 0.0000,  0.0000,  0.0000, -1.5632,  0.0000,  0.0000,  0.0000],
                                     [ 0.0000,  0.0000,  0.0000,  0.0000,  1.0186,  0.0000,  0.0000],
                                     [ 0.0000,  0.0000,  0.0000,  0.0000, -0.8306,  0.6089,  0.6089],
                                     [ 0.0000,  0.0000,  0.0000,  0.0000,  0.0000, -1.2177,  1.2177]]
        ,
        "JointToActuatorPosition" : [[ 1.0000,  0.0000,  0.0000,  0.0000,  0.0000,  0.0000,  0.0000],
                                     [ 0.0000,  1.0000,  0.0000,  0.0000,  0.0000,  0.0000,  0.0000],
                                     [ 0.0000,  0.0000,  1.0000,  0.0000,  0.0000,  0.0000,  0.0000],
                                     [ 0.0000,  0.0000,  0.0000, -0.6397,  0.0000,  0.0000,  0.0000],
                                     [ 0.0000,  0.0000,  0.0000,  0.0000,  0.9817,  0.0000,  0.0000],
                                     [ 0.0000,  0.0000,  0.0000,  0.0000,  0.6696,  0.8212, -0.4106],
                                     [ 0.0000,  0.0000,  0.0000,  0.0000,  0.6696,  0.8212,  0.4106]]
        ,
        "ActuatorToJointEffort" : [[ 1.0000,  0.0000,  0.0000,  0.0000,  0.0000,  0.0000,  0.0000],
                                   [ 0.0000,  1.0000,  0.0000,  0.0000,  0.0000,  0.0000,  0.0000],
                                   [ 0.0000,  0.0000,  1.0000,  0.0000,  0.0000,  0.0000,  0.0000],
                                   [ 0.0000,  0.0000,  0.0000, -0.6397,  0.0000,  0.0000,  0.0000],
                                   [ 0.0000,  0.0000,  0.0000,  0.0000,  0.9817,  0.6696,  0.6696],
                                   [ 0.0000,  0.0000,  0.0000,  0.0000,  0.0000,  0.8212,  0.8212],
                                   [ 0.0000,  0.0000,  0.0000,  0.0000,  0.0000, -0.4106,  0.4106]]
        ,
        "JointToActuatorEffort" : [[ 1.0000,  0.0000,  0.0000,  0.0000,  0.0000,  0.0000,  0.0000],
                                   [ 0.0000,  1.0000,  0.0000,  0.0000,  0.0000,  0.0000,  0.0000],
                                   [ 0.0000,  0.0000,  1.0000,  0.0000,  0.0000,  0.0000,  0.0000],
                                   [ 0.0000,  0.0000,  0.0000,  -1.5632, 0.0000,  0.0000,  0.0000],
                                   [ 0.0000,  0.0000,  0.0000,  0.0000,  1.0186, -0.8306,  0.0000],
                                   [ 0.0000,  0.0000,  0.0000,  0.0000,  0.0000,  0.6089, -1.2177],
                                   [ 0.0000,  0.0000,  0.0000,  0.0000,  0.0000,  0.6089,  1.2177]]
    }
    ,
    // angles used to engage the tool, in degrees or millimeters
    // make sure these are within the range of motion IN the cannula
    "tool-engage-position" : {
        "lower" : [0.0, 0.0, 0.0, -270.0, -15.0,  15.0, 0.0],
        "upper" : [0.0, 0.0, 0.0,  270.0,  15.0, -15.0, 0.0]
    }
    ,
    // values from dVRK user guide, converted to degrees or millimeters and floored (closest degree).
    // see PSM calibration for first 3 joints
    // see tool appendix for last 4 joints
    // for last joint, manual says [0, 30] but we need -20 to allow stronger torque, 80 to open wide
    "tool-joint-limit" : {
        "lower" : [ -91.0, -53.0,   0.0, -260.0, -80.0, -80.0, -30.0],
        "upper" : [  91.0,  53.0, 240.0,  260.0,  80.0,  80.0,  80.0]
    }
    ,
//    "base-offset" : [[     -0.9487 ,   0.3152 ,  -0.0262, 0.0],
//                   [-0.3153   ,-0.9490,   -0.0003, 0.0],
//                   [    -0.0249 ,   0.0079  ,  0.9997, 0.0],
//                   [ 0.0, 0.0, 0.0, 1.0]]
    "base-offset" : [[ 1 ,   0 ,  0, 0.0],
                      [0 ,  1, 0, 0.0],
                      [0 ,  0 ,  1.0, 0.0],
                      [ 0.0, 0.0, 0.0, 1.0]]
    ,
    // values from dVRK user guide
    // see PSM hardware for first 3 joints, motor torque * gear ratio
    // see tool appendix for last 4 joints
    "tool-torque-limit" : {
        "lower" : [ -4.97, -4.97, -14.81 , -0.33, -0.25, -0.20, -0.16],
        "upper" : [  4.97,  4.97,  14.81,   0.33,  0.25,  0.20,  0.16]
    }
    ,
    "homing-zero-position": 1 
}
